CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_channel-1.tif")
    Name to assign these images:Channel1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_channel-2.tif")
    Name to assign these images:Channel2
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_channel-3.tif")
    Name to assign these images:Channel3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_channel-4.tif")
    Name to assign these images:Channel4
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:Channel1
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.2
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:200
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:30
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:ExpandedNuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CellSurround
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:8|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notes:['Measure the intensity of the nuclei against the nuclei image.']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
    Hidden:1
    Select an image to measure:Channel2
    Select objects to measure:Nuclei
    Select objects to measure:CellSurround

MeasureObjectIntensity:[module_num:9|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Hidden:1
    Select an image to measure:Channel3
    Select objects to measure:Nuclei
    Select objects to measure:CellSurround

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:Channel4
    Select objects to measure:Nuclei
    Select objects to measure:CellSurround

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Channel1
    Name the output image:Result_Overlay_1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:Nuclei

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Result_Overlay_1
    Name the output image:Result_Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF8000
    Select objects to display:CellSurround

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:Result_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Channel1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Result_Overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Plasticity\\PH3_inmuno\\Cell_profiler_output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:14|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Plasticity\\PH3_inmuno\\Cell_profiler_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_Nuclei,Image|Width_Channel1,Image|Height_Channel1,Image|PathName_Channel3,Image|PathName_Channel2,Image|PathName_Channel1,Image|PathName_Channel4,Image|FileName_Channel3,Image|FileName_Channel2,Image|FileName_Channel1,Image|FileName_Channel4,CellSurround|Intensity_MinIntensity_Channel3,CellSurround|Intensity_MinIntensity_Channel2,CellSurround|Intensity_MinIntensity_Channel4,CellSurround|Intensity_StdIntensity_Channel3,CellSurround|Intensity_StdIntensity_Channel2,CellSurround|Intensity_StdIntensity_Channel4,CellSurround|Intensity_UpperQuartileIntensity_Channel3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CellSurround
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
